PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = intentionalbindingexeriment
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent polygon
      fillColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.7
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.7
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  Routine stimuli
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    PolygonComponent polygon_2
      fillColor = white
      shape = rectangle
      size [set every repeat] = (0.2, 0.5)
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response
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    TextComponent display_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Report the delay between the key press and rectangle bar stimuli (0-1000) in ms
        Use the Slider to pick the answer.
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "100", "200", "300", "400", "500", "600", "700", "800", "900", "1000"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditionsfile.xlsx
    loopType = random
    nReps = 9
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    conditions:
      [{'delay': 0.1, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.4, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'unexp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'}]
    Routine trial
    Routine stimuli
    Routine response
  LoopTerminator trials
